PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1000, 682]
  expName = main
  keyboardBackend = PsychToolbox
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Routines
  Routine Even_Train
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $Even
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  Routine Even_Test
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Even
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    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine starttest
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will be shown 6 different sets of numbers

        Press right if you think the set BELONGS to the same group of numbers you just saw

        Press left if you think the set DOES NOT belong to the group of numbers you just saw

        Press space to begin
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ten
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  Routine Ten_Train
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $Ten
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  Routine text_6
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  Routine Ten_Test
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Ten
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    KeyboardComponent key_resp_4
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine starttrain
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The following sequence of numbers fall under the same concept.

        Please pay attention to them.

        Press space to begin.
  Routine Odd_Train
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $Odd
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  Routine Odd_Test
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Odd
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    KeyboardComponent key_resp_6
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Negative_Train
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $Negative
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  Routine Negative_Test
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    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Negative
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    KeyboardComponent key_resp_7
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Even2
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    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $Even
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  Routine even2test
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    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Even
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    KeyboardComponent key_resp_8
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ten2
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    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $Ten
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  Routine ten2test
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    TextComponent text_15
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Ten
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    KeyboardComponent key_resp_9
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine neg2
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    TextComponent text_18
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $Negative
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  Routine neg2test
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    TextComponent text_19
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Negative
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    KeyboardComponent key_resp_11
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine odd2
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    TextComponent text_16
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $Odd
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  Routine odd2test
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    TextComponent text_17
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Odd
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    KeyboardComponent key_resp_10
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine starttrain
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0,1,2,3
    conditionsFile = train.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Even', 2), ('Ten', 40), ('Odd', 95), ('Negative', -30)]),
      OrderedDict([('Even', 32), ('Ten', 20), ('Odd', 7), ('Negative', -44)]),
      OrderedDict([('Even', 12), ('Ten', 60), ('Odd', 39), ('Negative', -845)]),
      OrderedDict([('Even', 136), ('Ten', 220), ('Odd', 55), ('Negative', -59)]),
      OrderedDict([('Even', 6), ('Ten', 20), ('Odd', 21), ('Negative', -28)]),
      OrderedDict([('Even', 8), ('Ten', 640), ('Odd', 3), ('Negative', -62)]),
      OrderedDict([('Even', 12), ('Ten', 260), ('Odd', 51), ('Negative', -111)]),
      OrderedDict([('Even', 98), ('Ten', 170), ('Odd', 77), ('Negative', -100)]),
      OrderedDict([('Even', 40), ('Ten', 30), ('Odd', 91), ('Negative', -3)]),
      OrderedDict([('Even', 4), ('Ten', 80), ('Odd', 33), ('Negative', -4)])]
    Routine Even_Train
  LoopTerminator trials
  Routine starttest
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 6,1,2,0,7,8
    conditionsFile = test.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Correct', 1), ('Even', '112, 216, 128'), ('Ten', '800, 900, 550'), ('Odd', '253, 173, 257'), ('Negative', '-65, -51, -27')]),
      OrderedDict([('Correct', 1), ('Even', '122, 40, 18'), ('Ten', '270, 290, 60'), ('Odd', '465, 323, 97'), ('Negative', '-84, -100, -244')]),
      OrderedDict([('Correct', 1), ('Even', '10, 70, 56'), ('Ten', '20, 200, 160'), ('Odd', '97, 93, 3'), ('Negative', '-174, -9, -92')]),
      OrderedDict([('Correct', 1), ('Even', '222, 50, 90'), ('Ten', '280, 20, 170'), ('Odd', '583, 261, 513'), ('Negative', '-160, -50, -266')]),
      OrderedDict([('Correct', 1), ('Even', '400, 76, 14'), ('Ten', '120, 270, 20'), ('Odd', '25, 87, 119'), ('Negative', '-16, -40, -27')]),
      OrderedDict([('Correct', 1), ('Even', '42, 88, 20'), ('Ten', '180, 60, 50'), ('Odd', '463, 515, 119'), ('Negative', '-30, -61, -122')]),
      OrderedDict([('Correct', 0), ('Even', '41, 187, 53'), ('Ten', '272,295,67'), ('Odd', '6, 168, 34'), ('Negative', '64, 21, 165')]),
      OrderedDict([('Correct', 0), ('Even', '313, 9, 33'), ('Ten', '21, 204, 155'), ('Odd', '2, 142, 48'), ('Negative', '264, 198, 211')]),
      OrderedDict([('Correct', 0), ('Even', '91, 299, 31'), ('Ten', '282, 401, 66'), ('Odd', '134, 72, 188'), ('Negative', '136, 169, 0')]),
      OrderedDict([('Correct', 0), ('Even', '221,63,111'), ('Ten', '22, 44, 509'), ('Odd', '162, 70, 118'), ('Negative', '219, 288, 39')]),
      OrderedDict([('Correct', 0), ('Even', '189, 77, 95'), ('Ten', '66, 138, 284'), ('Odd', '154, 166, 92'), ('Negative', '261, 67, 45')])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
    Routine Even_Test
  LoopTerminator trials_2
  Routine starttrain
  LoopInitiator trials_3 loopType="TrialHandler"
    Selected rows = 0,1,2,3
    conditionsFile = train.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Even', 2), ('Ten', 40), ('Odd', 95), ('Negative', -30)]),
      OrderedDict([('Even', 32), ('Ten', 20), ('Odd', 7), ('Negative', -44)]),
      OrderedDict([('Even', 12), ('Ten', 60), ('Odd', 39), ('Negative', -845)]),
      OrderedDict([('Even', 136), ('Ten', 220), ('Odd', 55), ('Negative', -59)]),
      OrderedDict([('Even', 6), ('Ten', 20), ('Odd', 21), ('Negative', -28)]),
      OrderedDict([('Even', 8), ('Ten', 640), ('Odd', 3), ('Negative', -62)]),
      OrderedDict([('Even', 12), ('Ten', 260), ('Odd', 51), ('Negative', -111)]),
      OrderedDict([('Even', 98), ('Ten', 170), ('Odd', 77), ('Negative', -100)]),
      OrderedDict([('Even', 40), ('Ten', 30), ('Odd', 91), ('Negative', -3)]),
      OrderedDict([('Even', 4), ('Ten', 80), ('Odd', 33), ('Negative', -4)])]
    Routine Ten_Train
  LoopTerminator trials_3
  Routine starttest
  LoopInitiator trials_4 loopType="TrialHandler"
    Selected rows = 6,1,2,0,7,8
    conditionsFile = test.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Correct', 1), ('Even', '112, 216, 128'), ('Ten', '800, 900, 550'), ('Odd', '253, 173, 257'), ('Negative', '-65, -51, -27')]),
      OrderedDict([('Correct', 1), ('Even', '122, 40, 18'), ('Ten', '270, 290, 60'), ('Odd', '465, 323, 97'), ('Negative', '-84, -100, -244')]),
      OrderedDict([('Correct', 1), ('Even', '10, 70, 56'), ('Ten', '20, 200, 160'), ('Odd', '97, 93, 3'), ('Negative', '-174, -9, -92')]),
      OrderedDict([('Correct', 1), ('Even', '222, 50, 90'), ('Ten', '280, 20, 170'), ('Odd', '583, 261, 513'), ('Negative', '-160, -50, -266')]),
      OrderedDict([('Correct', 1), ('Even', '400, 76, 14'), ('Ten', '120, 270, 20'), ('Odd', '25, 87, 119'), ('Negative', '-16, -40, -27')]),
      OrderedDict([('Correct', 1), ('Even', '42, 88, 20'), ('Ten', '180, 60, 50'), ('Odd', '463, 515, 119'), ('Negative', '-30, -61, -122')]),
      OrderedDict([('Correct', 0), ('Even', '41, 187, 53'), ('Ten', '272,295,67'), ('Odd', '6, 168, 34'), ('Negative', '64, 21, 165')]),
      OrderedDict([('Correct', 0), ('Even', '313, 9, 33'), ('Ten', '21, 204, 155'), ('Odd', '2, 142, 48'), ('Negative', '264, 198, 211')]),
      OrderedDict([('Correct', 0), ('Even', '91, 299, 31'), ('Ten', '282, 401, 66'), ('Odd', '134, 72, 188'), ('Negative', '136, 169, 0')]),
      OrderedDict([('Correct', 0), ('Even', '221,63,111'), ('Ten', '22, 44, 509'), ('Odd', '162, 70, 118'), ('Negative', '219, 288, 39')]),
      OrderedDict([('Correct', 0), ('Even', '189, 77, 95'), ('Ten', '66, 138, 284'), ('Odd', '154, 166, 92'), ('Negative', '261, 67, 45')])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
    Routine Ten_Test
  LoopTerminator trials_4
  Routine starttrain
  LoopInitiator trials_5 loopType="TrialHandler"
    Selected rows = 0,1,2,3
    conditionsFile = train.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine Odd_Train
  LoopTerminator trials_5
  Routine starttest
  LoopInitiator trials_6 loopType="TrialHandler"
    Selected rows = 6,1,2,0,7,8
    conditionsFile = test.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine Odd_Test
  LoopTerminator trials_6
  Routine starttrain
  LoopInitiator trials_7 loopType="TrialHandler"
    Selected rows = 0,1,2,3
    conditionsFile = train.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Even', 2), ('Ten', 40), ('Odd', 95), ('Negative', -39)]),
      OrderedDict([('Even', 32), ('Ten', 20), ('Odd', 7), ('Negative', -44)]),
      OrderedDict([('Even', 12), ('Ten', 60), ('Odd', 39), ('Negative', -845)]),
      OrderedDict([('Even', 136), ('Ten', 220), ('Odd', 55), ('Negative', -59)]),
      OrderedDict([('Even', 6), ('Ten', 20), ('Odd', 21), ('Negative', -28)]),
      OrderedDict([('Even', 8), ('Ten', 640), ('Odd', 3), ('Negative', -62)]),
      OrderedDict([('Even', 12), ('Ten', 260), ('Odd', 51), ('Negative', -111)]),
      OrderedDict([('Even', 98), ('Ten', 170), ('Odd', 77), ('Negative', -100)]),
      OrderedDict([('Even', 40), ('Ten', 30), ('Odd', 91), ('Negative', -3)]),
      OrderedDict([('Even', 4), ('Ten', 80), ('Odd', 33), ('Negative', -4)])]
    Routine Negative_Train
  LoopTerminator trials_7
  Routine starttest
  LoopInitiator trials_8 loopType="TrialHandler"
    Selected rows = 6,1,2,0,7,8
    conditionsFile = test.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine Negative_Test
  LoopTerminator trials_8
  Routine starttrain
  LoopInitiator trials_9 loopType="TrialHandler"
    Selected rows = 4,5,6,7,8,9
    conditionsFile = train.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine Even2
  LoopTerminator trials_9
  Routine starttest
  LoopInitiator trials_10 loopType="TrialHandler"
    Selected rows = 9,10,3,4,11,5
    conditionsFile = test.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine even2test
  LoopTerminator trials_10
  Routine starttrain
  LoopInitiator trials_11 loopType="TrialHandler"
    Selected rows = 4,5,6,7,8,9
    conditionsFile = train.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine ten2
  LoopTerminator trials_11
  Routine starttest
  LoopInitiator trials_12 loopType="TrialHandler"
    Selected rows = 9,10,3,4,11,5
    conditionsFile = test.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine ten2test
  LoopTerminator trials_12
  Routine starttrain
  LoopInitiator trials_13 loopType="TrialHandler"
    Selected rows = 4,5,6,7,8,9
    conditionsFile = train.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine odd2
  LoopTerminator trials_13
  Routine starttest
  LoopInitiator trials_14 loopType="TrialHandler"
    Selected rows = 9,10,3,4,11,5
    conditionsFile = test.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine odd2test
  LoopTerminator trials_14
  Routine starttrain
  LoopInitiator trials_15 loopType="TrialHandler"
    Selected rows = 4,5,6,7,8,9
    conditionsFile = train.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine neg2
  LoopTerminator trials_15
  Routine starttest
  LoopInitiator trials_16 loopType="TrialHandler"
    Selected rows = 9,10,3,4,11,5
    conditionsFile = test.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine neg2test
  LoopTerminator trials_16
